PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Action Priming Exp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine write_img
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    ImageComponent writeimg
      image [set every repeat] = $imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.3
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    TextComponent option1_text
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 1.0
      text [set every repeat] = $option1
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    TextComponent option2_text
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 1.0
      text [set every repeat] = $option2
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    KeyboardComponent key_resp
      allowedKeys = '1','0'
      correctAns = $corr_res
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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  Routine dance_img
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    ImageComponent danceimg
      image [set every repeat] = $imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.3
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    TextComponent option1_text_2
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 1.0
      text [set every repeat] = $option1
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    TextComponent option2_text_2
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 1.0
      text [set every repeat] = $option2
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    KeyboardComponent key_resp_2
      allowedKeys = '1','0'
      correctAns = $corr_res
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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  Routine writing_2
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    MovieComponent writing
      backend = ffpyplayer
      forceEndRoutine = True
      movie = expvideos/writing.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine dancing
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    MovieComponent dance
      backend = ffpyplayer
      forceEndRoutine = True
      movie = expvideos/dancing.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 15
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  Routine Welcome
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    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be shown a video followed by partial images of objects. After which you will be given two options.

        Select the option that is defining the image shown.
        Press 1 to select the left option
        Press 0 to slect the right option

        Press Space to Continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rest1
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    PolygonComponent fixation1
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Handswing
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    MovieComponent handswinging
      backend = ffpyplayer
      forceEndRoutine = True
      movie = expvideos/handswing.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 15
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  Routine walking_img
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    ImageComponent walkingimg
      image [set every repeat] = $imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.3
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    TextComponent option1_text_3
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 1.0
      text [set every repeat] = $option1
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    TextComponent option2_text_3
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 1.0
      text [set every repeat] = $option2
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    KeyboardComponent key_resp_4
      allowedKeys = '1','0'
      correctAns = $corr_res
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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  Routine walking
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    MovieComponent walkingvid
      backend = ffpyplayer
      forceEndRoutine = True
      movie = expvideos/walkingvideo.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 15
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  Routine handswing_img
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    ImageComponent handswingimg
      image [set every repeat] = $imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.3
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    TextComponent option1_text_4
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 1.0
      text [set every repeat] = $option1
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    TextComponent option2_text_4
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 1.0
      text [set every repeat] = $option2
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    KeyboardComponent key_resp_5
      allowedKeys = '1','0'
      correctAns = $corr_res
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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  Routine Bye
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    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!!!

        Press Space to Exit
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  LoopInitiator main_loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator trial1_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine writing_2
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = Instructional files/writing_trial.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'imagefile': 'expimages/paintbrush.jpg', 'object': 'paint brush', 'congruency': 'congruent', 'actiontype': 'hand', 'action': 'writing', 'option1': 'Paint Brush', 'option2': 'Bat', 'corr_res': 1},
          {'imagefile': 'expimages/crayons.jpg', 'object': 'crayon', 'congruency': 'congruent', 'actiontype': 'hand', 'action': 'writing', 'option1': 'Bottles', 'option2': 'Crayons', 'corr_res': 0},
          {'imagefile': 'expimages/keyboard.jpg', 'object': 'keyboard', 'congruency': 'incongruent', 'actiontype': 'hand', 'action': 'writing', 'option1': 'Containers', 'option2': 'Keyboard', 'corr_res': 0},
          {'imagefile': 'expimages/frisbee.PNG', 'object': 'frisbee disc', 'congruency': 'incongruent', 'actiontype': 'hand', 'action': 'writing', 'option1': 'Frisbee Disc', 'option2': 'Floor mat', 'corr_res': 1}]
        Routine write_img
      LoopTerminator trials
    LoopTerminator trial1_loop
    LoopInitiator trials3_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine walking
      LoopInitiator trials_3 loopType="TrialHandler"
        conditionsFile = Instructional files/walking_trial.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'imagefile': 'expimages/shoes.JPG', 'object': 'shoes', 'congruency': 'congruent', 'actiontype': 'leg', 'action': 'walking', 'option1': 'Baseball gloves', 'option2': 'Shoes', 'corr_res': 0},
          {'imagefile': 'expimages/slippers.jpg', 'object': 'slippers', 'congruency': 'congruent', 'actiontype': 'leg', 'action': 'walking', 'option1': 'Purse', 'option2': 'Slippers', 'corr_res': 0},
          {'imagefile': 'expimages/ice-skates.JPG', 'object': 'ice skate', 'congruency': 'incongruent', 'actiontype': 'leg', 'action': 'walking', 'option1': 'Ice skates', 'option2': 'Lamp', 'corr_res': 1},
          {'imagefile': 'expimages/skateboard.jpg', 'object': 'skateboard', 'congruency': 'incongruent', 'actiontype': 'leg', 'action': 'walking', 'option1': 'Plate', 'option2': 'Skateboard', 'corr_res': 0}]
        Routine walking_img
      LoopTerminator trials_3
    LoopTerminator trials3_loop
    LoopInitiator trial2_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine dancing
      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = Instructional files/dance_trial.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'imagefile': 'expimages/ghungroo.jpg', 'object': 'anklet bells/ghungroo', 'congruency': 'congruent', 'actiontype': 'leg', 'action': 'dancing', 'option1': 'Ghungroo/anklet bells', 'option2': 'Musical instrument', 'corr_res': 1},
          {'imagefile': 'expimages/balletshoes.jpg', 'object': 'ballet shoes', 'congruency': 'congruent', 'actiontype': 'leg', 'action': 'dancing', 'option1': 'Bag', 'option2': 'Ballet shoes', 'corr_res': 0},
          {'imagefile': 'expimages/skipping-rope.jpg', 'object': 'skipping rope', 'congruency': 'incongruent', 'actiontype': 'leg', 'action': 'dancing', 'option1': 'Skipping rope', 'option2': 'Mic', 'corr_res': 1},
          {'imagefile': 'expimages/skateboard.jpg', 'object': 'skateboard', 'congruency': 'incongruent', 'actiontype': 'leg', 'action': 'dancing', 'option1': 'Paint roller', 'option2': 'Skateboard', 'corr_res': 0}]
        Routine dance_img
      LoopTerminator trials_2
    LoopTerminator trial2_loop
    LoopInitiator trials4_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Handswing
      LoopInitiator trials_4 loopType="TrialHandler"
        conditionsFile = Instructional files/handswing_trial.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'imagefile': 'expimages/dart.jpg', 'object': 'dart', 'congruency': 'congruent', 'actiontype': 'hand', 'action': 'arm swing', 'option1': 'Dart', 'option2': 'Spoon', 'corr_res': 1},
          {'imagefile': 'expimages/screwdriver.jpg', 'object': 'screwdriver', 'congruency': 'incongruent', 'actiontype': 'hand', 'action': 'arm swing', 'option1': 'Pin', 'option2': 'Screwdriver', 'corr_res': 0},
          {'imagefile': 'expimages/racket.jpg', 'object': 'racket', 'congruency': 'congruent', 'actiontype': 'hand', 'action': 'arm swing', 'option1': 'Stapler', 'option2': 'Racket', 'corr_res': 0},
          {'imagefile': 'expimages/scissors.jpg', 'object': 'scissors', 'congruency': 'incongruent', 'actiontype': 'hand', 'action': 'arm swing', 'option1': 'Scissors', 'option2': 'Spectacle Frame', 'corr_res': 1}]
        Routine handswing_img
      LoopTerminator trials_4
    LoopTerminator trials4_loop
  LoopTerminator main_loop
  Routine Bye
