PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Delay Discounting Main
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      draggable = True
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Delay Discounting file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 137},
      {'reward_today': 15, 'future_reward': 35, 'delay': 68},
      {'reward_today': 27, 'future_reward': 50, 'delay': 7},
      {'reward_today': 40, 'future_reward': 55, 'delay': 155},
      {'reward_today': 49, 'future_reward': 60, 'delay': 190},
      {'reward_today': 67, 'future_reward': 75, 'delay': 118},
      {'reward_today': 78, 'future_reward': 80, 'delay': 34},
      {'reward_today': 22, 'future_reward': 27, 'delay': 112},
      {'reward_today': 35, 'future_reward': 81, 'delay': 15},
      {'reward_today': 50, 'future_reward': 72, 'delay': 189},
      {'reward_today': 59, 'future_reward': 143, 'delay': 76},
      {'reward_today': 48, 'future_reward': 97, 'delay': 5},
      {'reward_today': 18, 'future_reward': 61, 'delay': 102},
      {'reward_today': 73, 'future_reward': 147, 'delay': 120},
      {'reward_today': 26, 'future_reward': 54, 'delay': 198},
      {'reward_today': 19, 'future_reward': 66, 'delay': 70},
      {'reward_today': 51, 'future_reward': 106, 'delay': 2},
      {'reward_today': 44, 'future_reward': 83, 'delay': 134},
      {'reward_today': 8, 'future_reward': 33, 'delay': 41},
      {'reward_today': 72, 'future_reward': 141, 'delay': 156},
      {'reward_today': 61, 'future_reward': 120, 'delay': 143},
      {'reward_today': 23, 'future_reward': 85, 'delay': 191},
      {'reward_today': 37, 'future_reward': 78, 'delay': 88},
      {'reward_today': 53, 'future_reward': 101, 'delay': 199},
      {'reward_today': 10, 'future_reward': 43, 'delay': 25},
      {'reward_today': 39, 'future_reward': 66, 'delay': 108},
      {'reward_today': 47, 'future_reward': 137, 'delay': 14}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
    Routine trial
  LoopTerminator trials
