PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      draggable = True
      fillColor = white
      shape = cross
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.2,0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:
            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Experiment!

        You will be shown circular grids which are either straight vertical or tilted to some degree.

        If the lines are straight vertical, press the 'Up' arrow key
        If the lines are tilted, press the 'Down, arrow key

        Press 'Space' to Continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
