PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Word_PrimingExp
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      draggable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'tshirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'Reference': 'laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'Reference': 'chart', 'old_new': 'old'},
      {'test_word': 't_hi_t', 'Reference': 'tshirt', 'old_new': 'old'},
      {'test_word': '_o_se', 'Reference': 'mouse', 'old_new': 'old'},
      {'test_word': 'P_s_r_', 'Reference': 'pastry', 'old_new': 'old'},
      {'test_word': 'c_s_', 'Reference': 'case', 'old_new': 'old'},
      {'test_word': '_r_i_e', 'Reference': 'cruise', 'old_new': 'old'},
      {'test_word': 'p_li_e', 'Reference': 'police', 'old_new': 'old'},
      {'test_word': 'k_y_', 'Reference': 'keys', 'old_new': 'old'},
      {'test_word': 'p_st_r', 'Reference': 'poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'Reference': 'board', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'Reference': 'marble', 'old_new': 'old'},
      {'test_word': '_ho_e', 'Reference': 'phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'Reference': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_io_', 'Reference': 'cushion', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'Reference': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'Reference': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'Reference': 'vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'Reference': 'bottle ', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'Reference': 'camera', 'old_new': 'new'},
      {'test_word': '_u_rd', 'Reference': 'guard', 'old_new': 'new'},
      {'test_word': 's_ra_g_t', 'Reference': 'straight', 'old_new': 'new'},
      {'test_word': 'h_n_', 'Reference': 'hand', 'old_new': 'new'}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
    Routine test
  LoopTerminator trials_2
